PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1024, 768]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image
      image [set every repeat] = $Neutral
      pos = [-0.5, 0]
      size = [0.7, 0.7]
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $Stimulus
      pos = [0.5, 0]
      size = [0.7, 0.7]
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = '1', '2', '3', '4', '5', '6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.1
      pos = [0, -0.5]
      startVal [time (s)] = 0.0
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      text:
        1: Enojo
        2: Asco
        3: Miedo
        4: Felicidad
        5: Trsteza
        6: Sorpresa
    TextComponent text_3
      letterHeight = 0.1
      pos = [-0.5, -0.5]
      startVal [time (s)] = 0.0
      text = Neutral
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  Routine Thanks
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Terminaste la tarea

        ¡Reclama tu puente en el tablero!
  Routine Instr
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        ¿Estas pronto para seguir avanzando en el tablero?


        En esta tarea veras imagenes de actores que expresan 3 emociones distintas (miedo, enojo, sorpresa, tristeza, felicidad y asco)

        Algunas de estas expresiones son dificiles de detectar.
        ¡Tu tarea es adivinar la emocion que los actores estan expresando!


        En cada pantalla tu veras dos imagenes: a la izquierda una expresion neutra y a la derecha la imagen con la expreison que tiene que adivinar!
        Apreta el numero que corresponde a la emocion o dila en voz alta


        ¡Presiona la barra espaciadora para comenzar!
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'Stimulus': 'Stimuli/ARANG2.png', 'Neutral': 'Stimuli/ARNEU.png'},
      {'Stimulus': 'Stimuli/ARDIS3.png', 'Neutral': 'Stimuli/ARNEU.png'},
      {'Stimulus': 'Stimuli/ARFEA2.png', 'Neutral': 'Stimuli/ARNEU.png'},
      {'Stimulus': 'Stimuli/ARHAP2.png', 'Neutral': 'Stimuli/ARNEU.png'},
      {'Stimulus': 'Stimuli/ARSAD3.png', 'Neutral': 'Stimuli/ARNEU.png'},
      {'Stimulus': 'Stimuli/ARSUR2.png', 'Neutral': 'Stimuli/ARNEU.png'},
      {'Stimulus': 'Stimuli/EBANG1.png', 'Neutral': 'Stimuli/EBNEU.png'},
      {'Stimulus': 'Stimuli/EBDIS2.png', 'Neutral': 'Stimuli/EBNEU.png'},
      {'Stimulus': 'Stimuli/EBFEA3.png', 'Neutral': 'Stimuli/EBNEU.png'},
      {'Stimulus': 'Stimuli/EBHAP3.png', 'Neutral': 'Stimuli/EBNEU.png'},
      {'Stimulus': 'Stimuli/EBSAD3.png', 'Neutral': 'Stimuli/EBNEU.png'},
      {'Stimulus': 'Stimuli/EBSUR3.png', 'Neutral': 'Stimuli/EBNEU.png'},
      {'Stimulus': 'Stimuli/FFANG3.png', 'Neutral': 'Stimuli/FFNEU.png'},
      {'Stimulus': 'Stimuli/FFDIS2.png', 'Neutral': 'Stimuli/FFNEU.png'},
      {'Stimulus': 'Stimuli/FFFEA2.png', 'Neutral': 'Stimuli/FFNEU.png'},
      {'Stimulus': 'Stimuli/FFHAP3.png', 'Neutral': 'Stimuli/FFNEU.png'},
      {'Stimulus': 'Stimuli/FFSAD1.png', 'Neutral': 'Stimuli/FFNEU.png'},
      {'Stimulus': 'Stimuli/FFSUR2.png', 'Neutral': 'Stimuli/FFNEU.png'},
      {'Stimulus': 'Stimuli/FGANG2.png', 'Neutral': 'Stimuli/FGNEU.png'},
      {'Stimulus': 'Stimuli/FGDIS2.png', 'Neutral': 'Stimuli/FGNEU.png'},
      {'Stimulus': 'Stimuli/FGFEA2.png', 'Neutral': 'Stimuli/FGNEU.png'},
      {'Stimulus': 'Stimuli/FGHAP3.png', 'Neutral': 'Stimuli/FGNEU.png'}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
    Routine trial
  LoopTerminator trials
  Routine Thanks
